PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = LabInPsychProject
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
    TextComponent Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Short Term Memory Experiment.

        Press the space bar to continue.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent textInstructions
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A series of words will appear, each word lasting for a short viewing time.
        Try to remember each word that is presented to you.
        Press space bar to continue.
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrials
    TextComponent textStudyTrials
      color [set every repeat] = $WordColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $WordItem
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  Routine BlankScreen
    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WaitScreen
    TextComponent textWaitScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please notify researcher by clicking space bar.
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    KeyboardComponent keyWaitScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Y_N_Screen
    TextComponent textY_N_Screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Following words are testing your recall. Press either 'Y' for yes, 'N' for no. 
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    KeyboardComponent keyY_N
      allowedKeys = 'space' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestTrials
    TextComponent textTestTrials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent keyTestTrials
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BlankScreen_2
  Routine EndScreen
    TextComponent textEndScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank You for your participation in this study. 
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Flow
  Routine WelcomeScreen
  Routine BlankScreen
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = C:/Users/Khushi/Desktop/LabInPsych_project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxious', 'WordColor': 'blue'},
      {'WordItem': 'depressed', 'WordColor': 'blue'},
      {'WordItem': 'vexed', 'WordColor': 'blue'},
      {'WordItem': 'excited', 'WordColor': 'yellow'},
      {'WordItem': 'joyous', 'WordColor': 'yellow'},
      {'WordItem': 'contented', 'WordColor': 'yellow'},
      {'WordItem': 'jealous', 'WordColor': None},
      {'WordItem': 'fascinated', 'WordColor': None},
      {'WordItem': 'ashamed', 'WordColor': None},
      {'WordItem': 'aggravated', 'WordColor': None},
      {'WordItem': 'calm', 'WordColor': None},
      {'WordItem': 'delighted', 'WordColor': None}]
    Routine StudyTrials
    Routine BlankScreen
  LoopTerminator trials
  Routine WaitScreen
  Routine Y_N_Screen
  Routine BlankScreen
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Khushi/Desktop/LabInPsych_project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxious', 'WordColor': 'blue'},
      {'WordItem': 'depressed', 'WordColor': 'blue'},
      {'WordItem': 'vexed', 'WordColor': 'blue'},
      {'WordItem': 'excited', 'WordColor': 'yellow'},
      {'WordItem': 'joyous', 'WordColor': 'yellow'},
      {'WordItem': 'contented', 'WordColor': 'yellow'},
      {'WordItem': 'jealous', 'WordColor': None},
      {'WordItem': 'fascinated', 'WordColor': None},
      {'WordItem': 'ashamed', 'WordColor': None},
      {'WordItem': 'aggravated', 'WordColor': None},
      {'WordItem': 'calm', 'WordColor': None},
      {'WordItem': 'delighted', 'WordColor': None}]
    Routine TestTrials
    Routine BlankScreen
  LoopTerminator trials_2
  Routine EndScreen
